PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/chandamandhani/Documents/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'laptop'},
      {'study_word': 'camera'},
      {'study_word': 'window'},
      {'study_word': 'screen'},
      {'study_word': 'chair'},
      {'study_word': 'tables'},
      {'study_word': 'grass'},
      {'study_word': 'birds'},
      {'study_word': 'lion'},
      {'study_word': 'brick'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/chandamandhani/Documents/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e', 'corrAns': 'vase', 'priming': 1},
      {'test': 't_g_r', 'corrAns': 'tiger', 'priming': 1},
      {'test': '_oo_', 'corrAns': 'book', 'priming': 1},
      {'test': 'c_s_i_n', 'corrAns': 'cushion', 'priming': 1},
      {'test': '_ia_n_', 'corrAns': 'piano', 'priming': 1},
      {'test': 'h_u_e', 'corrAns': 'house', 'priming': 0},
      {'test': 'c_m_r_', 'corrAns': 'camera', 'priming': 1},
      {'test': 'b_n_n_', 'corrAns': 'banana', 'priming': 0},
      {'test': '_os_', 'corrAns': 'rose', 'priming': 0},
      {'test': 'o_a_n_e', 'corrAns': 'orange', 'priming': 0},
      {'test': 'l_p_o_', 'corrAns': 'laptop', 'priming': 1},
      {'test': 's_r__n', 'corrAns': 'screen', 'priming': 1},
      {'test': '_r__s', 'corrAns': 'trees', 'priming': 0},
      {'test': 'w_n__w', 'corrAns': 'window', 'priming': 1},
      {'test': 's_ea_e_', 'corrAns': 'speaker', 'priming': 0},
      {'test': 't_b_e_', 'corrAns': 'tables', 'priming': 1},
      {'test': 'a__le', 'corrAns': 'apple', 'priming': 0},
      {'test': 'p_o_e_', 'corrAns': 'phones', 'priming': 0},
      {'test': 'l_o_', 'corrAns': 'lion', 'priming': 1},
      {'test': 'g_a__', 'corrAns': 'grass', 'priming': 1},
      {'test': 'b_i_k', 'corrAns': 'brick', 'priming': 1},
      {'test': 't_m_t_', 'corrAns': 'tomato', 'priming': 0},
      {'test': '_a__s', 'corrAns': 'walls', 'priming': 0},
      {'test': 'e_y_s', 'corrAns': 'eyes', 'priming': 0},
      {'test': 'b_r_s', 'corrAns': 'birds', 'priming': 1},
      {'test': 'c_a_r', 'corrAns': 'chair', 'priming': 1},
      {'test': 'f_n', 'corrAns': 'fan', 'priming': 0},
      {'test': '_l_ss', 'corrAns': 'glass', 'priming': 0},
      {'test': 'p_n_i_', 'corrAns': 'pencil', 'priming': 0}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
    Routine test
  LoopTerminator trials_2
